PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '1', 'participant': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1080, 1920]
  color = black
  expName = stroop
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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    TextboxComponent word
      bold = False
      color [set every repeat] = $letterColor
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $text
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  Routine instruct
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
  Routine thanks
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    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 5
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    conditions:
      [{'text': 'red', 'congruent': 1, 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 0, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 1, 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 0, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 1, 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 0, 'corrAns': 'left', 'letterColor': 'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
